<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="GUI_SELECTED_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">10000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.chromatogrambuilder.ChromatogramBuilderModule">
        <parameter name="Raw data files" type="GUI_SELECTED_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min time span (min)">0.1</parameter>
        <parameter name="Min height">50000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">0.001</parameter>
                <parameter name="Search minimum in RT range (min)">0.1</parameter>
                <parameter name="Minimum relative height">0.01</parameter>
                <parameter name="Minimum absolute height">50000.0</parameter>
                <parameter name="Min ratio of peak top/edge">1.5</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.1</min>
                    <max>1.5</max>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Remove original peak list">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.isotopes.deisotoper.IsotopeGrouperModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">1</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.alignment.join.JoinAlignerModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Peak list name">Aligned peak list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">20.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Weight for RT">20.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.gapfilling.peakfinder.PeakFinderModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">1.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="RT correction">false</parameter>
        <parameter name="Remove original peak list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.gapfilling.samerange.SameRangeGapFillerModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.008</absolutetolerance>
            <ppmtolerance>13.0</ppmtolerance>
        </parameter>
        <parameter name="Remove original peak list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">Positive_Lipidomics_PeakHeight.csv</parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export identity elements">
            <item>All identity elements</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak height</item>
        </parameter>
        <parameter name="Export all IDs for peak">false</parameter>
        <parameter name="Identification separator">;</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">Positive_Lipidomics_PeakArea.csv</parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export identity elements">
            <item>All identity elements</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export all IDs for peak">false</parameter>
        <parameter name="Identification separator">;</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.projectmethods.projectsave.ProjectSaveAsModule">
        <parameter name="Project file">Positive_Lipidomics.mzmine</parameter>
    </batchstep>
</batch>
