<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="GUI_SELECTED_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">5000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="CDF Filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.targetedpeakdetection.TargetedPeakDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Name suffix">detectedPeak</parameter>
        <parameter name="Peak list file">SUBSET_TARGETED_pos.csv</parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Ignore first line">false</parameter>
        <parameter name="Intensity tolerance">1.0</parameter>
        <parameter name="Noise level">10000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">0.2</parameter>
                <parameter name="Search minimum in RT range (min)">0.1</parameter>
                <parameter name="Minimum relative height">0.2</parameter>
                <parameter name="Minimum absolute height">10000.0</parameter>
                <parameter name="Min ratio of peak top/edge">1.3</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.05</min>
                    <max>1.2</max>
                </parameter>
            </module>
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        </parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false"/>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false"/>
        <parameter name="Remove original peak list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.alignment.join.JoinAlignerModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Peak list name">Aligned peak list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">20.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Weight for RT">20.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.rowsfilter.RowsFilterModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum peaks in a row" selected="false">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</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="false">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</parameter>
        <parameter name="m/z" selected="true">
            <min>0.0</min>
            <max>80.0</max>
        </parameter>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">false</parameter>
        <parameter name="Reset the peak number ID">false</parameter>
        <parameter name="Remove source peak list after filtering">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.duplicatefilter.DuplicateFilterModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.11</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.gapfilling.samerange.SameRangeGapFillerModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Remove original peak list">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.gapfilling.peakfinder.PeakFinderModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">1.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="RT correction">false</parameter>
        <parameter name="Remove original peak list">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.duplicatefilter.DuplicateFilterModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.11</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">Positive_Lipidomics_PeakArea.csv</parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
            <item>Export row number of detected peaks</item>
        </parameter>
        <parameter name="Export identity elements">
            <item>All identity elements</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak area</item>
        </parameter>
        <parameter name="Export all IDs for peak">false</parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.projectmethods.projectsave.ProjectSaveAsModule">
        <parameter name="Project file">Positive_Lipidomics.mzmine</parameter>
    </batchstep>
</batch>
